! ispyb web service request time: 0.39s
! generated Wed, 11 Mar 2015 17:57:57
! params: raw_data=True, basedir=../links, request_basedir=../links

   JOB= ALL !XYCORR INIT COLSPOT IDXREF DEFPIX XPLAN INTEGRATE CORRECT
   !JOB= DEFPIX XPLAN INTEGRATE CORRECT
   DATA_RANGE= 1 1280
   
   SPOT_RANGE= 1 31
   
   
   SPOT_RANGE= 610 640
   
   
   BACKGROUND_RANGE= 1 4
   

   !masking non sensitive area of Pilatus
   UNTRUSTED_RECTANGLE= 487  495     0 2528
   UNTRUSTED_RECTANGLE= 981  989     0 2528
   UNTRUSTED_RECTANGLE=1475 1483     0 2528
   UNTRUSTED_RECTANGLE=1969 1977     0 2528
   UNTRUSTED_RECTANGLE=   0 2464   195  213
   UNTRUSTED_RECTANGLE=   0 2464   407  425
   UNTRUSTED_RECTANGLE=   0 2464   619  637
   UNTRUSTED_RECTANGLE=   0 2464   831  849
   UNTRUSTED_RECTANGLE=   0 2464  1043 1061
   UNTRUSTED_RECTANGLE=   0 2464  1255 1273
   UNTRUSTED_RECTANGLE=   0 2464  1467 1485
   UNTRUSTED_RECTANGLE=   0 2464  1679 1697
   UNTRUSTED_RECTANGLE=   0 2464  1891 1909
   UNTRUSTED_RECTANGLE=   0 2464  2103 2121
   UNTRUSTED_RECTANGLE=   0 2464  2315 2333
   TRUSTED_REGION=0.0 1.41 !Relative radii limiting trusted detector region

   !correction tables to compensate the misorientations of the modules

   X-GEO_CORR= /scisoft/pxsoft/data/AUTO_PROCESSING/id29/20150311/RAW_DATA/Steiner/P2_X1/x_geo_corr.cbf
   Y-GEO_CORR= /scisoft/pxsoft/data/AUTO_PROCESSING/id29/20150311/RAW_DATA/Steiner/P2_X1/y_geo_corr.cbf


   SECONDS=600
   MINIMUM_NUMBER_OF_PIXELS_IN_A_SPOT= 3

   !STRONG_PIXEL= 3.0

   OSCILLATION_RANGE= 0.1000
   STARTING_ANGLE= 48.0
   STARTING_FRAME= 1
   X-RAY_WAVELENGTH=  0.97932
   NAME_TEMPLATE_OF_DATA_FRAMES= /scisoft/pxsoft/data/AUTO_PROCESSING/id29/20150311/RAW_DATA/Steiner/P2_X1/test2_w1_1_????.cbf !CBF

   !STARTING_ANGLES_OF_SPINDLE_ROTATION= 0 180 10
   !TOTAL_SPINDLE_ROTATION_RANGES= 60 180 10

   DETECTOR_DISTANCE= 390.90
   DETECTOR= PILATUS MINIMUM_VALID_PIXEL_VALUE= 0.0 OVERLOAD= 1048500


   SENSOR_THICKNESS=1.00
   ORGX= 1229.62 ORGY= 1255.24
   NX= 2463 NY= 2527
   QX= 0.1720  QY= 0.1720
   VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS= 7000 30000

   DIRECTION_OF_DETECTOR_X-AXIS= 1.0 0.0 0.0
   DIRECTION_OF_DETECTOR_Y-AXIS= 0.0 1.0 0.0
   ROTATION_AXIS= 1.0 0.0 0.0
   INCIDENT_BEAM_DIRECTION= 0.0 0.0 1.0
   FRACTION_OF_POLARIZATION= 0.99
   POLARIZATION_PLANE_NORMAL= 0.0 1.0 0.0
   !AIR= %.8f

   SPACE_GROUP_NUMBER= 0
   UNIT_CELL_CONSTANTS= 0 0 0 0 0 0
   INCLUDE_RESOLUTION_RANGE= 50.0 0.0
   !RESOLUTION_SHELLS= 15.0 8.0 4.0 2.8 2.4
   !FRIEDEL'S_LAW= FALSE !default is TRUE
   !STRICT_ABSORPTION_CORRECTION=TRUE

   REFINE(INTEGRATE)= BEAM ORIENTATION CELL
   !== Default value recommended
   !DELPHI= %.3f
   MAXIMUM_NUMBER_OF_PROCESSORS= 16
   !MAXIMUM_NUMBER_OF_JOBS= 16FRIEDEL'S_LAW=TRUE
FRIEDEL'S_LAW=TRUE
